s:Ge/World/Material  = "Vacuum"
d:Ge/World/HLX       = 2.0 m
d:Ge/World/HLY       = 2.0 m
d:Ge/World/HLZ       = 2.0 m
b:Ge/World/Invisible = "True"

s:Ge/Phantom/Type     = "TsBox"
s:Ge/Phantom/Parent   = "World"
s:Ge/Phantom/Material = "G4_WATER"
d:Ge/Phantom/HLX      = 5 cm
d:Ge/Phantom/HLY      = 5 cm
d:Ge/Phantom/HLZ      = 20 cm
d:Ge/Phantom/TransZ   = -20. cm
i:Ge/Phantom/XBins = 1
i:Ge/Phantom/YBins = 1
i:Ge/Phantom/ZBins = 400
s:Ge/Phantom/Color    = "blue"

s:Ge/Box1/Type     = "TsBox"
s:Ge/Box1/Parent   = "Phantom"
d:Ge/Box1/HLX      = Ge/Phantom/HLX cm
d:Ge/Box1/HLY      = Ge/Phantom/HLY cm
d:Ge/Box1/HLZ      = 1 um
d:Ge/Box1/ZeroDepth = Ge/Phantom/HLZ + Ge/Box1/HLZ cm
d:Ge/Box1/GapSize = ${GAPSIZE} mm
d:Ge/Box1/BinDepth = Ge/Box1/GapSize cm * ${BIN}
d:Ge/Box1/TransZ   = Ge/Box1/ZeroDepth - Ge/Box1/BinDepth cm
i:Ge/Box1/XBins = 1
i:Ge/Box1/YBins = 1
i:Ge/Box1/ZBins = 1
s:Ge/Box1/Color    = "red"
b:Ge/Box1/IsParallel = "True"





s:Sc/DoseAtPhantom/Quantity = "DoseToMedium"
s:Sc/DoseAtPhantom/Component = "Phantom"
s:Sc/DoseAtPhantom/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/DoseAtPhantom/OutputToConsole = "True"



s:Gr/ViewA/Type                            = "OpenGL"
#i:Gr/ViewA/WindowSizeX                      = 900
#i:Gr/ViewA/WindowSizeY                      = 900
#d:Gr/ViewA/Theta                            = 55 deg
#d:Gr/ViewA/Phi                              = 20 deg
#s:Gr/ViewA/Projection                       = "Perspective"
#d:Gr/ViewA/PerspectiveAngle                 = 30 deg
#u:Gr/ViewA/Zoom                             = 1.3
#b:Gr/ViewA/HiddenLineRemovalForTrajectories = "True"


s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
s:So/Example/BeamParticle             = "proton"
d:So/Example/BeamEnergy               = 236.1 MeV
u:So/Example/BeamEnergySpread         = 0.1
s:So/Example/BeamPositionDistribution = "Gaussian"
s:So/Example/BeamPositionCutoffShape  = "Ellipse"
d:So/Example/BeamPositionCutoffX      = 10. cm
d:So/Example/BeamPositionCutoffY      = 10. cm
d:So/Example/BeamPositionSpreadX      = 0.065 cm
d:So/Example/BeamPositionSpreadY      = 0.065 cm
s:So/Example/BeamAngularDistribution  = "Gaussian"
d:So/Example/BeamAngularCutoffX       = 90. deg
d:So/Example/BeamAngularCutoffY       = 90. deg
d:So/Example/BeamAngularSpreadX       = 0.0032 rad
d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Example/NumberOfHistoriesInRun   = 10
i:Ts/ShowHistoryCountAtInterval =  10000

i:Ts/NumberOfThreads = 0

#b:Ts/PauseBeforeQuit = "True"
